CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:32
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Sample>[0-9]*).(?P<Field>[0-9]*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "boundary") (file doesnot contain "green") (file doesnot contain "phallo")
    Name to assign these images:img
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "boundary")
    Name to assign these images:img_boundary
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "green")
    Name to assign these images:img_background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "phallo")
    Name to assign these images:img_mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:img
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:2
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    Image name:img_phallo
    Channel number:3
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    Image name:img_dapi

ErodeImage:[module_num:6|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notes:['* to remove issue with artifacts close to the border - we simply start a liittle deeper']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
    Select the input image:img_mask
    Name the output image:img_mask
    Structuring element:disk,40

ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:img_phallo_bkg_corr
    Image or measurement?:Image
    Select the first image:img_phallo
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:img_background
    Multiply the second image by:1.0
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
MaskImage:[module_num:8|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
    Select the input image:img_dapi
    Name the output image:img_dapi
    Use objects or an image as a mask?:Image
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    Select image for mask:img_mask
    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:img_phallo_bkg_corr
    Name the output image:img_phallo_bkg_corr
    Use objects or an image as a mask?:Image
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    Select image for mask:img_mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['very selective, not workong on some images, based on adaptive', 'v1']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
    Select the input image:img_dapi
    Name the primary objects to be identified:obj_nucleus
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:200
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:11|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notes:['v3']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
    Select the input image:img_phallo_bkg_corr
    Name the primary objects to be identified:obj_actin
    Typical diameter of objects, in pixel units (Min,Max):5,200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3
    Threshold correction factor:1.6
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:300
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:img_boundary
    Name the primary objects to be identified:obj_boundary
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.01
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:obj_boundary
    Name the output image:img_boundary_conv
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:14|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:img_boundary_conv_inv
    Image or measurement?:Image
    Select the first image:img_boundary_conv
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:15|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
    Select the input image:img_boundary_conv_inv
    Name the output image:img_distance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

DefineGrid:[module_num:16|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
    Name the grid:obj_grid
    Number of rows:20
    Number of columns:50
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Manual
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    Select the method to define the grid manually:Coordinates
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:100,100
    Row number of the second cell:2
    Column number of the second cell:2
    Retain an image of the grid?:Yes
    Name the output image:img_grid
    Select the image on which to display the grid:img_phallo
    Use a previous grid if gridding fails?:No

IdentifyObjectsInGrid:[module_num:17|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
    Select the defined grid:obj_grid
    Name the objects to be identified:obj_probes
    Select object shapes and locations:Circle Forced Location
    Specify the circle diameter automatically?:Manual
    Circle diameter:50
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
ConvertImageToObjects:[module_num:18|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
    Select the input image:img_mask
    Name the output object:obj_mask
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MaskObjects:[module_num:19|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
    Select objects to be masked:obj_probes
    Name the masked objects:obj_probes_masked
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:obj_mask
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:img_background, img_dapi, img_distance, img_phallo, img_phallo_bkg_corr
    Select objects to measure:obj_actin, obj_nucleus, obj_probes_masked

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:obj_actin, obj_nucleus, obj_probes_masked
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:22|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
    Measure the area occupied by:Objects
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    Select object sets to measure:obj_actin, obj_mask, obj_nucleus, obj_probes_masked

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:img
    Name the output image:img_over_nuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0207
    Select objects to display:obj_nucleus

OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:img
    Name the output image:img_over_actin
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0207
    Select objects to display:obj_actin

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:img
    Name the output image:img_over_probes
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0207
    Select objects to display:obj_probes_masked

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:img
    Name the output image:img_over_mask
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FB0207
    Select objects to display:obj_mask

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:img_over_actin
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-over-actin
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:img_over_probes
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-over-probes
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:img_over_nuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-over-nuclei
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:img_over_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-over-mask
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:img_distance
    Select method for constructing file names:From image filename
    Select image name for file prefix:img
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-dist
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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